CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "tif")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Channel>.*?)_(?P<PlateID>.*)_(?P<WellID>.*)_(?P<FieldID>.*)_w(?P<hash>.*).tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<path>.*)[\\\\\\\\/](?P<PlateID>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Tubulin': u'PlateID', 'DNA': u'PlateID', u'Actin': u'PlateID'}, {u'Tubulin': u'WellID', 'DNA': u'WellID', u'Actin': u'WellID'}, {u'Tubulin': u'FieldID', 'DNA': u'FieldID', u'Actin': u'FieldID'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Actin")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Tubulin")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:CytoSkeleton
    Select the method to identify the secondary objects:Propagation
    Select the input image:Tubulin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:CytoSkeleton
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:9|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Tubulin
    Select objects to measure:CytoSkeleton
    Texture scale to measure:5
    Measure images or objects?:Objects

MeasureTexture:[module_num:10|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Actin
    Select objects to measure:Cells
    Texture scale to measure:5
    Measure images or objects?:Objects

MeasureTexture:[module_num:11|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei
    Texture scale to measure:5
    Measure images or objects?:Objects

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:Actin
    Select objects to measure:Cells

MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:Tubulin
    Select objects to measure:CytoSkeleton

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectIntensityDistribution:[module_num:15|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
    Hidden:2
    Hidden:1
    Hidden:1
    Hidden:2
    Calculate intensity Zernikes?:None
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    Select an image to measure:Actin
    Select an image to measure:Tubulin
    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:6
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    Image:Actin
    Objects to display:Do not use
    Number of bins:4
    Measurement:Fraction at Distance
    Color map:hot
    Save display as image?:Yes
    Output image name:Actin_heatmap
    Image:Tubulin
    Objects to display:Do not use
    Number of bins:4
    Measurement:Fraction at Distance
    Color map:hot
    Save display as image?:No
    Output image name:Heatmap

MeasureGranularity:[module_num:16|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
    Image count:3
    Object count:1
    Select an image to measure:Tubulin
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:CytoSkeleton
    Object count:1
    Select an image to measure:Actin
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei

MeasureColocalization:[module_num:17|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
    Hidden:2
    Hidden:1
    Select an image to measure:Actin
    Select an image to measure:Tubulin
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cells

MeasureImageAreaOccupied:[module_num:18|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:CytoSkeleton
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\\\\g<PlateID>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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